CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:11
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "celldive_testChannel1")
    Name to assign these images:DAPI1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "celldive_testChannel2")
    Name to assign these images:PanCK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "celldive_testChannel3")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "celldive_testChannel4")
    Name to assign these images:CYP19A1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "celldive_testChannel5")
    Name to assign these images:LYVE_1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "celldive_testChannel6")
    Name to assign these images:ATP1A1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "celldive_testChannel7")
    Name to assign these images:CD31
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "celldive_testChannel8")
    Name to assign these images:HLA_A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "celldive_testChannel9")
    Name to assign these images:HLA_G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "celldive_testChannel10")
    Name to assign these images:DAPI2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cell_dive_label_test")
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    Name to assign these objects:OrgNuc
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
FilterObjects:[module_num:5|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notes:['This will run all features for objects that are relabeled in each mask and also removed objects that fall on the edge of the image.']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
    Select the objects to filter:OrgNuc
    Name the output objects:FilteredNucs
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:FilteredNucs
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI1
    Number of pixels by which to expand the primary objects:20
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
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
OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI1
    Name the output image:NucOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:FilteredNuclei

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI1
    Name the output image:CellOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cell

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:FilteredNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:ATP1A1, CD31, CD45, CYP19A1, DAPI1, DAPI2, HLA_A, HLA_G, LYVE_1, PanCK
    Select objects to measure:FilteredNuclei

MeasureObjectIntensityDistribution:[module_num:11|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
    Select images to measure:ATP1A1, CD31, CD45, CYP19A1, DAPI1, DAPI2, HLA_A, HLA_G, LYVE_1, PanCK
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes only
    Maximum zernike moment:9
    Select objects to measure:FilteredNuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:12|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
    Select objects to measure:Cell
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureTexture:[module_num:13|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
    Select images to measure:ATP1A1, CD31, CD45, CYP19A1, DAPI1, DAPI2, HLA_A, HLA_G, LYVE_1, PanCK
    Select objects to measure:FilteredNuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:features
    Overwrite existing files without warning?:Yes
    Data to export:FilteredNuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cell
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
